CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:10
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['DNA: DNA stained with DAPI', 'PH3: An antibody for phosphorylated histone H3 correlated with mitosis', 'cellbody: ']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:5
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "_4.png")
    Name to assign these images:ch4
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_0.png")
    Name to assign these images:ch0
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_1.png")
    Name to assign these images:ch1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_2.png")
    Name to assign these images:ch2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_3.png")
    Name to assign these images:ch3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:ch4
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):3,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:ch2
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
MeasureObjectSizeShape:[module_num:7|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
    Select object sets to measure:Nuclei, Cells
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureImageAreaOccupied:[module_num:8|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
    Measure the area occupied by:Objects
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    Select object sets to measure:Cells

MeasureImageIntensity:[module_num:9|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
    Select images to measure:ch4, ch2, ch1, ch0, ch3
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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
ExportToSpreadsheet:[module_num:10|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Desktop\\CellResults
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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